PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = manipulation-of-belief
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine SAM
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    ImageComponent question
      image = stimuli/sam-1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent rating
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine video
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    MovieComponent video1
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = stimuli/18840567-hd_1920_1080_30fps.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  Routine video
  Routine SAM
